---
API: 2.1
OpenSesame: 3.3.10
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path None
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background black

define loop block_loop
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 blockname exclusion
	setcycle 0 otherplayerweight 8
	setcycle 0 player2weight 2
	setcycle 1 blockname neutral
	setcycle 1 otherplayerweight 5
	setcycle 1 player2weight 5
	run trials_loop

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run getting_started always
	run welcome always
	run init_exp always
	run block_loop always

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define inline_script init_exp
	set description "Executes Python code"
	___run__
	var.current_player = 1
	__end__
	set _prepare ""

define feedback new_feedback
	set reset_variables yes
	set duration 0
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[movie_filename]" x=0 y=0 z_index=0

define loop new_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run ""

define sketchpad new_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[movie_filename]" x=0 y=0 z_index=0

define sequence play1_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run prepare_player1 always
	run play_movie always

define sequence play2_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run wait_for_user always
	run prepare_player2 always
	run play_movie always

define sequence play3_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run prepare_player3 always
	run play_movie always

define inline_script play_movie
	set description "Executes Python code"
	___run__
	# my_canvas = Canvas()
	
	# for i in range(-25,25):
	#     my_canvas.text(var.movie_filename)    
	#     my_canvas.text("*",x = i*5,y = i**2 - 200)
	#     my_canvas.show()
	#     clock.sleep(40)
	#     my_canvas.clear()
	    
	
	import cv2
	import numpy
	import pygame
	# Full path to the video file in file pool
	path = pool[var.movie_filename]
	# Open the video
	video = cv2.VideoCapture(path)
	
	fps =  video.get(cv2.CAP_PROP_FPS)
	
	print(fps)
	# A loop to play the video file. This can also be a while loop until a key
	# is pressed. etc.
	for i in range(100):
	    # Get a frame
	    try:
	        retval, frame = video.read()
	        # Rotate it, because for some reason it otherwise appears flipped.
	        frame = numpy.rot90(frame)
	        # Flip it (vertically?!), because for some reason it otherwise appears horizontally (!) flipped.
	        frame = numpy.flipud(frame)
	        # The video uses BGR colors and PyGame needs RGB
	        
	        frame = cv2.cvtColor(frame, cv2.COLOR_BGR2RGB)
	        # Create a PyGame surface
	        surf = pygame.surfarray.make_surface(frame)
	    except:
	        #end of movie
	        break 
	        
	    # Show the PyGame surface!
	    exp.surface.blit(surf, (0, 0))
	    pygame.display.flip()
	    
	    # 
	    #clock.sleep(1000/fps)
	    myclocktick(fps)
	__end__
	___prepare__
	def myclocktick(foo):
	  #inspired by clock.tick
	  #see https://stackoverflow.com/questions/34383559/pygame-clock-tick-vs-framerate-in-game-main-loop
	  if var.has(u'prevt'):
	        diff = ((1000/foo) - (clock.time() - var.prevt) ) - 10
	        if diff>0:
	            clock.sleep(diff)
	        
	  var.prevt = clock.time()
	__end__

define inline_script play_movie_1
	set description "Executes Python code"
	___run__
	my_canvas = Canvas()
	# Function interface
	
	
	# wait for a key or continue after 2 seconds
	#my_keyboard = Keyboard()
	#response, timestamp = my_keyboard.get_key(keylist=['z', 'x'],timeout=2000)
	
	for i in range(-25,25):
	    my_canvas.text(var.movie_filename)    
	    my_canvas.text("*",x = i*5,y = i**2 - 200)
	    my_canvas.show()
	    clock.sleep(40)
	    my_canvas.clear()
	    
	    
	__end__
	set _prepare ""

define loop player1_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous yes
	set break_if_on_first no
	set break_if always
	setcycle 0 target_player 2
	setcycle 0 Weight "[player2weight]"
	setcycle 1 target_player 3
	setcycle 1 Weight "[otherplayerweight]"
	weight Weight
	shuffle
	run play1_seq

define loop player2_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty ""
	run play2_seq

define loop player3_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous yes
	set break_if_on_first no
	set break_if always
	setcycle 0 target_player 2
	setcycle 0 Weight "[player2weight]"
	setcycle 1 target_player 1
	setcycle 1 Weight "[otherplayerweight]"
	weight Weight
	run play3_seq

define inline_script prepare_player1
	set description "Executes Python code"
	___run__
	var.movie_filename = "1to" + str(var.target_player) + ".wmv"
	var.current_player = var.target_player # info for next trial
	__end__
	set _prepare ""

define inline_script prepare_player2
	set description "Executes Python code"
	___run__
	var.movie_filename = "2to" + str(var.response) + ".wmv"
	var.current_player = var.response # info for next trial
	__end__
	set _prepare ""

define inline_script prepare_player3
	set description "Executes Python code"
	set _run ""
	___prepare__
	var.movie_filename = '3to' + str(var.target_player) + '.wmv'
	var.current_player = var.target_player # info for next trial
	__end__

define sequence trial_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run player1_loop "=var.current_player == 1"
	run player2_loop "=var.current_player == 2"
	run player3_loop "=var.current_player == 3"

define loop trials_loop
	set source table
	set repeat 60
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run trial_seq

define keyboard_response wait_for_user
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;3"

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=1 html=yes show_if=always text="Welcome to Cyberball, the Interactive Ball-Tossing Game Used for Mental Visualisation!<br /><br />In the upcoming experiment, we test the effects of practising mental visualisation on task performance. Thus, we need you to practise your mental visualisation skills. We have found that the best way to do this is to have you play an on-line game of catch with other participants who are logged on at the same time.<br /><br />In a few moments, you will be playing a game of catch with other students over our network. The game is very simple. When the ball is tossed to you, simply use the keyboard to indicate the player (with numerical key 1 or 3) you want to throw it to. When the game is over, the experimenter will give you additional instructions.<br /><br />What is important is not your ball tossing performance, but that you MENTALLY VISUALISE the entire experience. Imagine what the others look like. What sort of people are they? Where are you playing? Is it warm and sunny, or cold and rainy? Create in your mind a complete mental picture of what might be going on if you were playing this game in real life.<br /><br />Okay, ready to begin?" x=-2.0 y=-34.0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Welcome to Cyberball, the Interactive Ball-Tossing Game Used for Mental Visualisation!<br /><br />In the upcoming experiment, we test the effects of practising mental visualisation on task performance. Thus, we need you to practise your mental visualisation skills. We have found that the best way to do this is to have you play an on-line game of catch with other participants who are logged on at the same time.<br /><br />In a few moments, you will be playing a game of catch with other students over our network. The game is very simple. When the ball is tossed to you, simply use the keyboard to indicate the player (with numerical key 1 or 3) you want to throw it to. When the game is over, the experimenter will give you additional instructions.<br /><br />What is important is not your ball tossing performance, but that you MENTALLY VISUALISE the entire experience. Imagine what the others look like. What sort of people are they? Where are you playing? Is it warm and sunny, or cold and rainy? Create in your mind a complete mental picture of what might be going on if you were playing this game in real life.<br /><br />Okay, ready to begin?" x=0 y=0 z_index=0

