---
API: 2.1
OpenSesame: 3.3.10
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:\\Users\\steenbergenhvan1\\surfdrive\\Virtual_P\\My Documents\\Teaching\\2022-2023\\Experimentation I nw style\\Exp1Docs_Shared\\05_Loops\\CyberballOS"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background black

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run init_exp always
	run welcome always
	run trials_loop always

define inline_script init_exp
	set description "Executes Python code"
	set _run ""
	___prepare__
	var.current_player = 1
	var.movie_filename = "1to2.wmv"
	__end__

define media_player_mpy play1to2
	set video_src "1to2.wmv"
	set soundrenderer sounddevice
	set resizeVideo yes
	set playaudio yes
	set loop no
	set event_handler_trigger "on keypress"
	set event_handler ""
	set duration keypress
	set description "Media player based on moviepy"

define media_player_mpy play1to3
	set video_src "1to3.wmv"
	set soundrenderer sounddevice
	set resizeVideo yes
	set playaudio yes
	set loop no
	set event_handler_trigger "on keypress"
	set event_handler ""
	set duration keypress
	set description "Media player based on moviepy"

define media_player_mpy play2to1
	set video_src "2to1.wmv"
	set soundrenderer sounddevice
	set resizeVideo yes
	set playaudio yes
	set loop no
	set event_handler_trigger "on keypress"
	set event_handler ""
	set duration keypress
	set description "Media player based on moviepy"

define media_player_mpy play2to3
	set video_src "2to3.wmv"
	set soundrenderer sounddevice
	set resizeVideo yes
	set playaudio yes
	set loop no
	set event_handler_trigger "on keypress"
	set event_handler ""
	set duration keypress
	set description "Media player based on moviepy"

define media_player_mpy play3to1
	set video_src "3to1.wmv"
	set soundrenderer sounddevice
	set resizeVideo yes
	set playaudio yes
	set loop no
	set event_handler_trigger "on keypress"
	set event_handler ""
	set duration keypress
	set description "Media player based on moviepy"

define media_player_mpy play3to2
	set video_src "3to2.wmv"
	set soundrenderer sounddevice
	set resizeVideo yes
	set playaudio yes
	set loop no
	set event_handler_trigger "on keypress"
	set event_handler ""
	set duration keypress
	set description "Media player based on moviepy"

define loop player1_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous yes
	set break_if_on_first no
	set break_if always
	setcycle 0 target_player 2
	setcycle 1 target_player 3
	run player1_seq

define sequence player1_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run prepare_player1 always
	run play1to2 "[target_player] = 2"
	run play1to3 "[target_player] = 3"

define loop player2_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run player2_seq

define sequence player2_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run wait_for_user always
	run prepare_player2 always
	run play2to1 "[response] = 1"
	run play2to3 "[response] = 3"

define loop player3_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous yes
	set break_if_on_first no
	set break_if always
	setcycle 0 target_player 2
	setcycle 1 target_player 1
	run player3_seq

define sequence player3_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run prepare_player3 always
	run play3to1 "[target_player] = 1"
	run play3to2 "[target_player] = 2"

define inline_script prepare_player1
	set description "Executes Python code"
	___run__
	var.tempcurrent_player = var.target_player # info for next trial
	__end__
	set _prepare ""

define inline_script prepare_player2
	set description "Executes Python code"
	set _run "var.tempcurrent_player = var.response # info for next trial"
	set _prepare ""

define inline_script prepare_player3
	set description "Executes Python code"
	___run__
	var.tempcurrent_player = var.target_player # info for next trial
	__end__
	set _prepare ""

define inline_script set_player_next_trial
	set description "Executes Python code"
	set _run "var.current_player = var.tempcurrent_player"
	set _prepare ""

define sequence trial_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run player1_loop "[current_player] = 1"
	run player2_loop "[current_player] = 2"
	run player3_loop "[current_player] = 3"
	run set_player_next_trial always

define loop trials_loop
	set source_file ""
	set source table
	set repeat 10
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run trial_seq

define keyboard_response wait_for_user
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;3"

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Welcome to Cyberball, the Interactive Ball-Tossing Game Used for Mental Visualisation!<br /><br />In the upcoming experiment, we test the effects of practising mental visualisation on task performance. Thus, we need you to practise your mental visualisation skills. We have found that the best way to do this is to have you play an on-line game of catch with other participants who are logged on at the same time.<br /><br />In a few moments, you will be playing a game of catch with other students over our network. The game is very simple. When the ball is tossed to you, simply use the keyboard to indicate the player (with numerical key 1 or 3) you want to throw it to. When the game is over, the experimenter will give you additional instructions.<br /><br />What is important is not your ball tossing performance, but that you MENTALLY VISUALISE the entire experience. Imagine what the others look like. What sort of people are they? Where are you playing? Is it warm and sunny, or cold and rainy? Create in your mind a complete mental picture of what might be going on if you were playing this game in real life.<br /><br />Okay, ready to begin?<br /><br />Press SPACE" x=0 y=0 z_index=0

