---
API: 2.1
OpenSesame: 3.3.12
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "Extended template"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 32
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:\\Users\\Gebruiker\\Documents\\Teaching_AY2223_S2\\Experimentation\\OpenSesame_Exercises\\OS_extra_exercises"
set disable_garbage_collection yes
set description "A template containing a practice and an experimental phase"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set bidi yes
set background black

define loop block_loop
	set source table
	set skip 0
	set repeat 4
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 12
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if "[stopPractice] = 1 and [practice] = 'yes'"
	setcycle 0 flanker "{{{{{"
	setcycle 0 trial_type congruent
	setcycle 0 correct_resp q
	setcycle 0 smiley pface
	setcycle 1 flanker "{{}{{"
	setcycle 1 trial_type incongruent
	setcycle 1 correct_resp p
	setcycle 1 smiley pface
	setcycle 2 flanker "}}}}}"
	setcycle 2 trial_type congruent
	setcycle 2 correct_resp p
	setcycle 2 smiley pface
	setcycle 3 flanker "}}{}}"
	setcycle 3 trial_type incongruent
	setcycle 3 correct_resp q
	setcycle 3 smiley pface
	setcycle 4 flanker "{{{{{"
	setcycle 4 trial_type congruent
	setcycle 4 correct_resp q
	setcycle 4 smiley uface
	setcycle 5 flanker "{{}{{"
	setcycle 5 trial_type incongruent
	setcycle 5 correct_resp p
	setcycle 5 smiley uface
	setcycle 6 flanker "}}}}}"
	setcycle 6 trial_type congruent
	setcycle 6 correct_resp p
	setcycle 6 smiley uface
	setcycle 7 flanker "}}{}}"
	setcycle 7 trial_type incongruent
	setcycle 7 correct_resp q
	setcycle 7 smiley uface
	setcycle 8 flanker "{{{{{"
	setcycle 8 trial_type congruent
	setcycle 8 correct_resp q
	setcycle 8 smiley nface
	setcycle 9 flanker "{{}{{"
	setcycle 9 trial_type incongruent
	setcycle 9 correct_resp p
	setcycle 9 smiley nface
	setcycle 10 flanker "}}}}}"
	setcycle 10 trial_type congruent
	setcycle 10 correct_resp p
	setcycle 10 smiley nface
	setcycle 11 flanker "}}{}}"
	setcycle 11 trial_type incongruent
	setcycle 11 correct_resp q
	setcycle 11 smiley nface
	run trial_sequence

define sequence block_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run reset_feedback always
	run init_counters always
	run present_current_points always
	run block_loop always
	run break "[experimental_block_count] = 1 or [experimental_block_count] = 2"

define sketchpad break
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Take a break!" x=0 y=-64 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=always text="Press any key to continue whenever you are ready." x=0 y=64 z_index=0

define inline_script counterbalance_point_counter
	set description "Executes Python code"
	set _run ""
	___prepare__
	# Change starting points of participant based on subject parity. Odd participant number is assigned to lucky group that starts with 100 points, 
	# while even participant number is assigned to unlucky group that starts with -100 points.
	if var.subject_parity == 'odd':
	    var.group = 'lucky group'
	else:
	    var.group = 'unlucky group'
	__end__

define sketchpad end_of_experiment
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the experiment is finished"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Thanks for participating!  <br /><br /><br />Press any key to exit. Bye! " x=0 y=0 z_index=0

define sketchpad end_of_practice
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the practice phase is finished"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="End of practice. <br /><br /><br />Press any key to continue" x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run counterbalance_point_counter always
	run init_stop_practice always
	run instructions1 always
	run practice_loop always
	run end_of_practice always
	run instructions2 always
	run experimental_loop always
	run end_of_experiment always

define loop experimental_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 3
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run block_sequence

define sketchpad flanker_stimulus
	set start_response_interval no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="[flanker]" x=0 y=0 z_index=0

define inline_script init_counters
	set description "Executes Python code"
	set _run ""
	___prepare__
	# Initialize starting points for the block based on subject grouping (see counterbalance_point_counter)
	if var.group == 'lucky group':
	    var.totalPoints = 100
	else:
	    var.totalPoints = -100
	
	
	# Initialize counter for trial (used to break block loop during practice when 24 trials have been reached)
	var.trials_passed = 0
	
	
	# Add 1 to the variable that counts the experimental block run. This will be the basis of 'Run if' condition to limit presentation of the 'break' sketchpad
	# only after the 1st and 2nd run of the experimental block
	if var.practice == 'no':
	    var.experimental_block_count = var.experimental_block_count + 1
	    
	__end__

define inline_script init_stop_practice
	set description "Executes Python code"
	set _run ""
	___prepare__
	# Initialize a variable that will be used as a condition to break 'block loop' in the 'practice loop'
	# when the 24 trials have been reached
	var.stopPractice = 0
	
	# Initialize a variable that will be used as a 'Run if' condition to limit presenation of the 'break' sketchpad
	# after the 1st and 2nd run of the experimental block
	var.experimental_block_count = 0
	__end__

define sketchpad instructions1
	set start_response_interval no
	set duration keypress
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color=white font_bold=yes font_family=mono font_italic=no font_size=32 html=yes show_if=always text=Instructions x=-17 y=-293 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="In this task you will see a row of arrow heads like below:<br /><br />	}}}}} <br /><br />Your task is to identify the direction where the middlemost arrow head points. <br /><br />Press q for left<br />Press p for right<br /><br />Respond as fast and as accurate as possible.<br /><br />Press any key to start the practice run." x=0 y=32 z_index=0

define sketchpad instructions2
	set start_response_interval no
	set duration keypress
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color=white font_bold=yes font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Remember:" x=15 y=-197 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Your task is to identify the direction where the middlemost arrow head points. <br /><br />Press q for left<br />Press p for right<br /><br />Respond as fast and as accurate as possible.<br /><br />Press any key to start the experimental run." x=0 y=32 z_index=0

define keyboard_response keyboard_response
	set timeout 1000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[correct_resp]"
	set allowed_responses "p; q"

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define inline_script points_calculation_script
	set description "Executes Python code"
	___run__
	# Set awarded points based on smileys shown:
	# Participants earn 20 points when presented with a pleasant smiley
	if var.smiley == 'pface':
	    var.totalPoints = var.totalPoints + 20
	
	# lose 20 points when presented with an unpleasant smiley
	elif var.smiley == 'uface':
	    var.totalPoints = var.totalPoints - 20
	
	# no points change when presented with a neutral smiley
	elif var.smiley == 'nface':
	    var.totalPoints = var.totalPoints + 0
	__end__
	set _prepare ""

define loop practice_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	run block_sequence

define sketchpad present_current_points
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="You start with [totalPoints] points.<br /><br /><br />Press any key to continue." x=0 y=0 z_index=0

define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sketchpad smiley
	set duration 500
	set description "Displays stimuli"
	draw image center=1 file="[smiley].png" scale=1 show_if=always x=0 y=0 z_index=0

define inline_script stop_practice_script
	set description "Executes Python code"
	___run__
	# Set value of stopPractice to 1 when practice is yes and 23 trials have passed. 
	if var.practice == 'yes' and var.trials_passed == 24:
	    var.stopPractice = 1
	__end__
	set _prepare ""

define sketchpad total_points_ITI
	set duration 750
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Current total points: [totalPoints]" x=0 y=0 z_index=0

define inline_script trial_counter
	set description "Executes Python code"
	___run__
	# Count trials passed
	var.trials_passed = var.trials_passed + 1
	__end__
	set _prepare ""

define sequence trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run trial_counter always
	run flanker_stimulus always
	run keyboard_response always
	run smiley always
	run points_calculation_script always
	run total_points_ITI always
	run stop_practice_script always
	run logger always

