---
API: 2.1
OpenSesame: 3.3.12
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "Extended template"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 32
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:\\Users\\Gebruiker\\Documents\\Teaching_AY2223_S2\\Experimentation\\OpenSesame_Exercises\\OS_extra_exercises"
set disable_garbage_collection yes
set description "A template containing a practice and an experimental phase"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set bidi yes
set background black

define loop block_loop
	set source table
	set skip 0
	set repeat 4
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 12
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if "[stopPractice] = 1 and [practice] = 'yes'"
	setcycle 0 flanker "{{{{{"
	setcycle 0 trial_type congruent
	setcycle 0 correct_resp q
	setcycle 0 smiley ""
	setcycle 1 flanker "{{}{{"
	setcycle 1 trial_type incongruent
	setcycle 1 correct_resp p
	setcycle 1 smiley ""
	setcycle 2 flanker "}}}}}"
	setcycle 2 trial_type congruent
	setcycle 2 correct_resp p
	setcycle 2 smiley ""
	setcycle 3 flanker "}}{}}"
	setcycle 3 trial_type incongruent
	setcycle 3 correct_resp q
	setcycle 3 smiley ""
	setcycle 4 flanker "{{{{{"
	setcycle 4 trial_type congruent
	setcycle 4 correct_resp q
	setcycle 4 smiley ""
	setcycle 5 flanker "{{}{{"
	setcycle 5 trial_type incongruent
	setcycle 5 correct_resp p
	setcycle 5 smiley ""
	setcycle 6 flanker "}}}}}"
	setcycle 6 trial_type congruent
	setcycle 6 correct_resp p
	setcycle 6 smiley ""
	setcycle 7 flanker "}}{}}"
	setcycle 7 trial_type incongruent
	setcycle 7 correct_resp q
	setcycle 7 smiley ""
	setcycle 8 flanker "{{{{{"
	setcycle 8 trial_type congruent
	setcycle 8 correct_resp q
	setcycle 8 smiley ""
	setcycle 9 flanker "{{}{{"
	setcycle 9 trial_type incongruent
	setcycle 9 correct_resp p
	setcycle 9 smiley ""
	setcycle 10 flanker "}}}}}"
	setcycle 10 trial_type congruent
	setcycle 10 correct_resp p
	setcycle 10 smiley ""
	setcycle 11 flanker "}}{}}"
	setcycle 11 trial_type incongruent
	setcycle 11 correct_resp q
	setcycle 11 smiley ""
	run trial_sequence

define sequence block_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run reset_feedback always
	run init_counters always
	run restart_practice_instructions "[repeatPractice] = 1"
	run present_current_points always
	run block_loop always
	run feedback_percentage_script always
	run present_feedback_percentage always
	run break "[experimental_block_count] = 1 or [experimental_block_count] = 2"

define sketchpad break
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Take a break!" x=0 y=-64 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=always text="Press any key to continue whenever you are ready." x=0 y=64 z_index=0

define sketchpad end_of_experiment
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the experiment is finished"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Thanks for participating!  <br /><br /><br />Press any key to exit. Bye! " x=0 y=0 z_index=0

define sketchpad end_of_practice
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the practice phase is finished"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="End of practice. <br /><br /><br />Press any key to continue" x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run init_stop_practice always
	run instructions1 always
	run practice_loop "[practice] = yes or [repeatPractice] = 1"
	run end_of_practice always
	run instructions2 always
	run experimental_loop always
	run end_of_experiment always

define loop experimental_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 3
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run block_sequence

define inline_script feedback_counter
	set description "Executes Python code"
	___run__
	# Add occurences of feedback type
	# pleasant feedback
	if var.smiley == 1:
	    var.pleasant_fb_count = var.pleasant_fb_count + 1
	    var.total_fb_count = var.total_fb_count + 1
	
	# unpleasant feedback
	elif var.smiley == 2:
	    var.unpleasant_fb_count = var.unpleasant_fb_count + 1
	    var.total_fb_count = var.total_fb_count + 1
	
	# neutral feedback
	else:
	    var.neutral_fb_count = var.neutral_fb_count + 1
	    var.total_fb_count = var.total_fb_count + 1
	__end__
	set _prepare ""

define inline_script feedback_percentage_script
	set description "Executes Python code"
	___run__
	# Compute percentages for each feedback type:
	# pleasant feedback 
	var.pleasant_percentage = (var.pleasant_fb_count/var.total_fb_count) * 100
	
	# unpleasant feedback
	var.unpleasant_percentage = (var.unpleasant_fb_count/var.total_fb_count) * 100
	    
	# neutral feedback
	var.neutral_percentage = (var.neutral_fb_count/var.total_fb_count) * 100
	
	# Set repeatPractice variable to 1 to be used as a 'Run if' condition to show the instructions when practice is repeated (see restart_practice_instructions in the block sequence)
	if var.practice == 'yes' and var.unpleasant_percentage > 50:
	    var.repeatPractice = 1 # set to 1 to repeat practice
	    var.endPracticeBlock = 0 # set to 0 to not break 'practice loop'
	    var.stopPractice = 0 # reset to 0 to enable the 'block loop'
	else:
	    var.repeatPractice = 0 # set to 0 to not repeat practice
	    var.endPracticeBlock = 1 # set to 1 to break 'practice loop'
	__end__
	set _prepare ""

define sketchpad flanker_stimulus
	set start_response_interval no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="[flanker]" x=0 y=0 z_index=0

define inline_script init_counters
	set description "Executes Python code"
	set _run ""
	___prepare__
	# Initialize counter for the total points accumulated every trial (presented in 'total_points_ITI' sketchpad)
	var.totalPoints = 0
	
	# Initialize counter for trial (used to break block loop during practice when 24 trials have been reached)
	var.trials_passed = 0
	
	# Initialize counters for the performance-contingent smiley feedback
	# per each feedback type:
	var.pleasant_fb_count = 0
	var.unpleasant_fb_count = 0
	var.neutral_fb_count = 0
	
	# for total feedback type (use to compute the percentages)
	var.total_fb_count = 0
	
	# for percentages for each feedback type
	var.pleasant_percentage = 0
	var.unpleasant_percentage = 0
	var.neutral_percentage = 0
	
	
	# Add 1 to the variable that counts the experimental block run. This will be the basis of 'Run if' condition to limit presentation of the 'break' sketchpad
	# only after the 1st and 2nd run of the experimental block
	if var.practice == 'no':
	    var.experimental_block_count = var.experimental_block_count + 1
	    
	__end__

define inline_script init_stop_practice
	set description "Executes Python code"
	set _run ""
	___prepare__
	# Initialize a variable that will be used as a condition to break 'block loop' in the 'practice loop'
	# when the 24 trials have been reached
	var.stopPractice = 0
	
	# Initialize a variable that will be used as a 'Run if' condition to limit presenation of the 'break' sketchpad
	# after the 1st and 2nd run of the experimental block
	var.experimental_block_count = 0
	
	
	# Initialize a variable that will be used as a 'Run if' condition to repeat practice loop if participant received more than 50% unpleasant smiley feedback. This also serves as 'Run if' condition to show the instructions when practice is repeated (see restart_practice_instructions in the block sequence)
	var.repeatPractice = 0
	
	
	# Initialize a variable that will be used as a 'Break if' condition of the the practice loop once the unpleasant smiley feedback is less than 50% 
	var.endPracticeBlock = 0
	
	
	# Initialize a practice variable that will be a condition to indicate if the block is a practice one or not
	var.practice = 'yes'
	__end__

define sketchpad instructions1
	set start_response_interval no
	set duration keypress
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color=white font_bold=yes font_family=mono font_italic=no font_size=32 html=yes show_if=always text=Instructions x=-17 y=-293 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="In this task you will see a row of arrow heads like below:<br /><br />	}}}}} <br /><br />Your task is to identify the direction where the middlemost arrow head points. <br /><br />Press q for left<br />Press p for right<br /><br />Respond as fast and as accurate as possible.<br /><br />Press any key to start the practice run." x=0 y=32 z_index=0

define sketchpad instructions2
	set start_response_interval no
	set duration keypress
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color=white font_bold=yes font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Remember:" x=15 y=-197 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Your task is to identify the direction where the middlemost arrow head points. <br /><br />Press q for left<br />Press p for right<br /><br />Respond as fast and as accurate as possible.<br /><br />Press any key to start the experimental run." x=0 y=32 z_index=0

define keyboard_response keyboard_response
	set timeout 1000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[correct_resp]"
	set allowed_responses "p; q"

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define inline_script performance_contingent_smiley
	set description "Executes Python code"
	___run__
	# Set feedback depending on the participant's trial performance:
	# Present a pleasant smiley and apply 20 points gain only when the participant 
	# performs correctly and within 500 ms
	if var.correct == 1 and var.response_time_keyboard_response <= 500:
	    var.smiley = 1
	    var.totalPoints = var.totalPoints + 20
	    
	# Present an unpleasant smiley and apply 20 points loss when 
	# the participant performs incorrectly or is too late.
	elif var.correct == 0 or var.response_time_keyboard_response > 1000:
	    var.smiley = 2
	    var.totalPoints = var.totalPoints - 20
	    
	# Present a neutral smiley and apply no point change 
	# in other cases. 
	else:
	    var.smiley = 3
	    var.totalPoints = var.totalPoints + 0
	__end__
	set _prepare ""

define loop practice_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 100
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if "[endPracticeBlock] = 1"
	setcycle 0 practice yes
	run block_sequence

define sketchpad present_current_points
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="You start with [totalPoints] points.<br /><br /><br />Press any key to continue." x=0 y=0 z_index=0

define feedback present_feedback_percentage
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Percentages of your accumulated feedback type for this block: <br /><br /><br />Pleasant smiley: [pleasant_percentage]%<br />Unpleasant smiley: [unpleasant_percentage]%<br />Neutral smiley: [neutral_percentage]%<br /><br /><br />Press any key to continue." x=0 y=0 z_index=0

define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sketchpad restart_practice_instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Because you received 50% unpleasant smileys, <br />you will need to repeat the practice block. <br /><br />Remember: Your task is to identify the direction where the middlemost arrow head points. <br /><br />Press q for left<br />Press p for right<br /><br />Respond as fast and as accurate as possible.<br /><br />Press any key to restart the practice run.<br /><br />" x=0 y=96 z_index=0
	draw textline center=1 color=white font_bold=yes font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Restart practice" x=0 y=-256 z_index=0

define feedback smiley_feedback
	set reset_variables yes
	set duration 500
	set description "Provides feedback to the participant"
	draw image center=1 file="pface.png" scale=1 show_if="[smiley] = 1" x=0 y=0 z_index=0
	draw image center=1 file="uface.png" scale=1 show_if="[smiley] = 2" x=0 y=0 z_index=0
	draw image center=1 file="nface.png" scale=1 show_if="[smiley] = 3" x=0 y=0 z_index=0

define inline_script stop_practice_script
	set description "Executes Python code"
	___run__
	# Set value of stopPractice to 1 when practice is yes and 23 trials have passed. 
	if var.practice == 'yes' and var.trials_passed == 24:
	    var.stopPractice = 1
	__end__
	set _prepare ""

define sketchpad total_points_ITI
	set duration 750
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Current total points: [totalPoints]" x=0 y=0 z_index=0

define inline_script trial_counter
	set description "Executes Python code"
	___run__
	# Count trials passed
	var.trials_passed = var.trials_passed + 1
	__end__
	set _prepare ""

define sequence trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run trial_counter always
	run flanker_stimulus always
	run keyboard_response always
	run performance_contingent_smiley always
	run smiley_feedback always
	run feedback_counter always
	run total_points_ITI always
	run stop_practice_script always
	run logger always

