---
API: 2.1
OpenSesame: 3.3.10
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "Form template"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set round_decimals 2
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 24
set font_italic no
set font_family sans
set font_bold no
set experiment_path "C:/Users/steenbergenhvan1/surfdrive/Virtual_P/My Documents/Teaching/2022-2023/Experimentation I nw style/Exp1Docs_Shared/12_Ques"
set disable_garbage_collection yes
set description "A simple template for form-based questionnaires"
set coordinates relative
set compensation 0
set canvas_backend legacy
set bidi yes
set background white

define loop AllQuestionnaires
	set source table
	set repeat 0
	set order random
	set description "Repeatedly runs another item"
	set cycles 55
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 ItID IPIP50_Hd1
	setcycle 0 ItemDescription "Describe yourself as you generally are now, not as you wish to be in the future. Describe yourself as you honestly see yourself, in relation to other people you know of the same sex as you are, and roughly your same age. So that you can describe yourself in an honest manner, your responses will be kept in absolute confidence."
	setcycle 0 o01 ""
	setcycle 0 o02 ""
	setcycle 0 o03 ""
	setcycle 0 o04 ""
	setcycle 0 o05 ""
	setcycle 0 o06 ""
	setcycle 0 o07 ""
	setcycle 0 o08 ""
	setcycle 0 o09 ""
	setcycle 0 PreSelection 0
	setcycle 0 Comment 0
	setcycle 1 ItID IPIP50_It01
	setcycle 1 ItemDescription "1. Am the life of the party."
	setcycle 1 o01 ""
	setcycle 1 o02 ""
	setcycle 1 o03 "Very Inaccurate"
	setcycle 1 o04 "Moderately Inaccurate"
	setcycle 1 o05 "Neither Accurate Nor Inaccurate"
	setcycle 1 o06 "Moderately Accurate"
	setcycle 1 o07 "Very Accurate"
	setcycle 1 o08 ""
	setcycle 1 o09 ""
	setcycle 1 PreSelection 0
	setcycle 1 Comment 1
	setcycle 2 ItID IPIP50_It02
	setcycle 2 ItemDescription "2. Feel little concern for others."
	setcycle 2 o01 ""
	setcycle 2 o02 ""
	setcycle 2 o03 "Very Inaccurate"
	setcycle 2 o04 "Moderately Inaccurate"
	setcycle 2 o05 "Neither Accurate Nor Inaccurate"
	setcycle 2 o06 "Moderately Accurate"
	setcycle 2 o07 "Very Accurate"
	setcycle 2 o08 ""
	setcycle 2 o09 ""
	setcycle 2 PreSelection 0
	setcycle 2 Comment 2
	setcycle 3 ItID IPIP50_It03
	setcycle 3 ItemDescription "3. Am always prepared."
	setcycle 3 o01 ""
	setcycle 3 o02 ""
	setcycle 3 o03 "Very Inaccurate"
	setcycle 3 o04 "Moderately Inaccurate"
	setcycle 3 o05 "Neither Accurate Nor Inaccurate"
	setcycle 3 o06 "Moderately Accurate"
	setcycle 3 o07 "Very Accurate"
	setcycle 3 o08 ""
	setcycle 3 o09 ""
	setcycle 3 PreSelection 0
	setcycle 3 Comment 3
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	run dummyseq

define loop RunOneSheetOf10Items
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 QuestSheet IPIP50_1of5
	setcycle 0 QuestStartRow 1
	setcycle 1 QuestSheet IPIP50_5of5
	setcycle 1 QuestStartRow 45
	run sheet_seq

define notepad about_this_template
	__note__
	This template already contains the basic structure of a typical questionnaire,
	consisting of open and multiple-choice questions.
	For more information, please visit:
	- <http://osdoc.cogsci.nl/>
	Have fun with OpenSesame!
	__end__
	set description "Some pointers to help you get started!"

define sequence dummyseq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run about_this_template always
	run AllQuestionnaires always
	run RunOneSheetOf10Items always
	run goodbye always

define form_text_display goodbye
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Quit
	set margins "50;50;50;50"
	set form_title Finished
	set form_text "Thank you for your participation!"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define inline_script init_qcanvas
	set description "Executes Python code"
	set _run ""
	set _prepare ""

define inline_script log_answers
	set description "Executes Python code"
	set _run ""
	set _prepare ""

define logger new_logger
	set description "Logs experimental data"
	set auto_log yes

define loop queslog_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 11
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 ItemID "<byscript>"
	setcycle 0 ItemDescr "<byscript>"
	setcycle 0 ChosenOption "N/A (header)"
	setcycle 0 ChosenOptDes "N/A (header)"
	setcycle 1 ItemID "<byscript>"
	setcycle 1 ItemDescr "<byscript>"
	setcycle 1 ChosenOption "<byscript>"
	setcycle 1 ChosenOptDes "<byscript>"
	setcycle 2 ItemID "<byscript>"
	setcycle 2 ItemDescr "<byscript>"
	setcycle 2 ChosenOption "<byscript>"
	setcycle 2 ChosenOptDes "<byscript>"
	setcycle 3 ItemID "<byscript>"
	setcycle 3 ItemDescr "<byscript>"
	setcycle 3 ChosenOption "<byscript>"
	setcycle 3 ChosenOptDes "<byscript>"
	setcycle 4 ItemID "<byscript>"
	setcycle 4 ItemDescr "<byscript>"
	setcycle 4 ChosenOption "<byscript>"
	setcycle 4 ChosenOptDes "<byscript>"
	setcycle 5 ItemID "<byscript>"
	setcycle 5 ItemDescr "<byscript>"
	setcycle 5 ChosenOption "<byscript>"
	setcycle 5 ChosenOptDes "<byscript>"
	setcycle 6 ItemID "<byscript>"
	setcycle 6 ItemDescr "<byscript>"
	setcycle 6 ChosenOption "<byscript>"
	setcycle 6 ChosenOptDes "<byscript>"
	setcycle 7 ItemID "<byscript>"
	setcycle 7 ItemDescr "<byscript>"
	setcycle 7 ChosenOption "<byscript>"
	setcycle 7 ChosenOptDes "<byscript>"
	setcycle 8 ItemID "<byscript>"
	setcycle 8 ItemDescr "<byscript>"
	setcycle 8 ChosenOption "<byscript>"
	setcycle 8 ChosenOptDes "<byscript>"
	setcycle 9 ItemID "<byscript>"
	setcycle 9 ItemDescr "<byscript>"
	setcycle 9 ChosenOption "<byscript>"
	setcycle 9 ChosenOptDes "<byscript>"
	setcycle 10 ItemID "<byscript>"
	setcycle 10 ItemDescr "<byscript>"
	setcycle 10 ChosenOption "<byscript>"
	setcycle 10 ChosenOptDes "<byscript>"
	run queslog_seq

define sequence queslog_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_logger always

define inline_script refr_qcanvas
	set description "Executes Python code"
	set _run ""
	set _prepare ""

define sequence sheet_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run init_qcanvas always
	run refr_qcanvas always
	run log_answers always
	run queslog_loop always

