---
API: 2.1
OpenSesame: 3.3.12
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "Smoking Go-NoGo"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 32
set font_italic no
set font_family mono
set font_bold no
set experiment_path None
set disable_garbage_collection yes
set description "A template containing a practice and an experimental phase"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set bidi yes
set background black

define sketchpad background
	set start_response_interval no
	set duration 500
	set description "Displays stimuli"
	draw image center=1 file="[image]" scale=1.25 show_if="[cue_type] != 'neutral'" x=0 y=0 z_index=0

define sketchpad background_1
	set start_response_interval no
	set duration 500
	set description "Displays stimuli"
	draw image center=1 file="[image]" scale=1.25 show_if="[cue_type] != 'neutral'" x=0 y=0 z_index=0

define sketchpad background_response
	set start_response_interval no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[image]" scale=1.25 show_if="[cue_type] != 'neutral'" x=0 y=0 z_index=0
	draw circle color=black fill=1 penwidth=1 r=19 show_if=always x=0 y=0 z_index=0
	draw textline center=1 color=yellow font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="[stim_letter]" x=0 y=0 z_index=0

define sketchpad background_response_1
	set start_response_interval no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[image]" scale=1.25 show_if="[cue_type] != 'neutral'" x=0 y=0 z_index=0
	draw circle color=black fill=1 penwidth=1 r=19 show_if=always x=0 y=0 z_index=0
	draw textline center=1 color=yellow font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="[stim_letter]" x=0 y=0 z_index=0

define inline_script block_count
	set description "Executes Python code"
	set _run ""
	set _prepare "var.block = var.block + 1"

define loop block_loop
	set source table
	set skip 0
	set repeat 5
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 5
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 trial_type go
	setcycle 0 stim_letter M
	setcycle 0 correct_resp m
	setcycle 1 trial_type go
	setcycle 1 stim_letter M
	setcycle 1 correct_resp m
	setcycle 2 trial_type go
	setcycle 2 stim_letter M
	setcycle 2 correct_resp m
	setcycle 3 trial_type go
	setcycle 3 stim_letter M
	setcycle 3 correct_resp m
	setcycle 4 trial_type nogo
	setcycle 4 stim_letter W
	setcycle 4 correct_resp None
	run trial_sequence

define loop block_loop_1
	set source table
	set skip 0
	set repeat 25
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 5
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 trial_type go
	setcycle 0 stim_letter M
	setcycle 0 correct_resp m
	setcycle 1 trial_type go
	setcycle 1 stim_letter M
	setcycle 1 correct_resp m
	setcycle 2 trial_type go
	setcycle 2 stim_letter M
	setcycle 2 correct_resp m
	setcycle 3 trial_type go
	setcycle 3 stim_letter M
	setcycle 3 correct_resp m
	setcycle 4 trial_type nogo
	setcycle 4 stim_letter W
	setcycle 4 correct_resp None
	run trial_sequence_1

define sequence block_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run reset_feedback always
	run block_loop always
	run feedback always

define sequence block_sequence_1
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run reset_feedback_1 always
	run block_count always
	run block_loop_1 always
	run feedback_1 "[block] < 6"
	run end_of_break "[block] < 6"

define sketchpad end_of_break
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="The break has finished. <br /><br /><br />Press any key to continue to the next block." x=0 y=0 z_index=0

define sketchpad end_of_experiment
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the experiment is finished"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="You have reached the end of the experiment. <br /><br /><br />Thank you for your participation. <br /><br /><br />Press any key to exit." x=0.0 y=0.0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run init_block always
	run instructions always
	run practice_loop always
	run experimental_loop always
	run end_of_experiment always

define loop experimental_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 6
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice 0
	setcycle 0 image "F1.jpg"
	setcycle 0 cue_type neutral
	setcycle 1 practice 0
	setcycle 1 image "F1.jpg"
	setcycle 1 cue_type neutral
	setcycle 2 practice 0
	setcycle 2 image "F1.jpg"
	setcycle 2 cue_type smoking
	setcycle 3 practice 0
	setcycle 3 image "F11.jpg"
	setcycle 3 cue_type smoking
	setcycle 4 practice 0
	setcycle 4 image "N1.jpg"
	setcycle 4 cue_type nonsmoking
	setcycle 5 practice 0
	setcycle 5 image "N11.jpg"
	setcycle 5 cue_type nonsmoking
	run block_sequence_1

define feedback feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Your average response time was [avg_rt]ms<br /><br />Your accuracy was [acc]%<br /><br /><br />Now, you will start with the experimental block. Press any key to continue. " x=0 y=0 z_index=0

define feedback feedback_1
	set reset_variables yes
	set duration 30000
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Your average response time was [avg_rt]ms<br /><br />Your accuracy was [acc]%<br /><br /><br />You may take a break. The break lasts for 30 seconds." x=0 y=0 z_index=0

define inline_script init_block
	set description "Executes Python code"
	set _run ""
	set _prepare "var.block = 0"

define sketchpad instructions
	set start_response_interval no
	set duration keypress
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="You will be presented with one of two letters: <br />an 'M' or an 'W'.<br /><br />When you see an 'M', press the m key as fast as you can. <br /><br />When you see an 'W', do NOT press anything. <br /><br /><br /><br /> You will first complete some practice trials. <br /><br /><br /><br />Press ANY key to begin the practice trials." x=-9.0 y=57.0 z_index=0
	draw textline center=1 color=white font_bold=yes font_family=mono font_italic=no font_size=32 html=yes show_if=always text=Instructions x=7.0 y=-261.0 z_index=0

define keyboard_response keyboard_response
	set timeout 1300
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[correct_resp]"
	set allowed_responses m

define keyboard_response keyboard_response_1
	set timeout 1300
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[correct_resp]"
	set allowed_responses m

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define loop practice_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice 1
	setcycle 0 image "F1.jpg"
	setcycle 0 cue_type neutral
	run block_sequence

define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define reset_feedback reset_feedback_1
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sketchpad stimulus_response
	set start_response_interval no
	set duration 200
	set description "Displays stimuli"
	draw image center=1 file="[image]" scale=1.25 show_if="[cue_type] != 'neutral'" x=0 y=0 z_index=0
	draw circle color=black fill=1 penwidth=1 r=19 show_if=always x=0 y=0 z_index=0
	draw textline center=1 color=yellow font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="[stim_letter]" x=0 y=0 z_index=0

define sketchpad stimulus_response_1
	set start_response_interval no
	set duration 200
	set description "Displays stimuli"
	draw image center=1 file="[image]" scale=1.25 show_if="[cue_type] != 'neutral'" x=0 y=0 z_index=0
	draw circle color=black fill=1 penwidth=1 r=19 show_if=always x=0 y=0 z_index=0
	draw textline center=1 color=yellow font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="[stim_letter]" x=0 y=0 z_index=0

define sequence trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run background always
	run stimulus_response always
	run background_response always
	run keyboard_response always
	run logger always

define sequence trial_sequence_1
	set flush_keyboard yes
	set description "A single trial"
	run background_1 always
	run stimulus_response_1 always
	run background_response_1 always
	run keyboard_response_1 always
	run logger always

