---
API: 2.1
OpenSesame: 3.3.14
Platform: posix
---
set width 1024
set uniform_coordinates no
set title "New experiment"
set synth_backend legacy
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 32
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/Users/Zahir/Downloads"
set disable_garbage_collection yes
set description "Default description"
set coordinates relative
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set bidi no
set background black

define form_text_input Answer
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title Recall
	set form_question "TASK [Nback]. What were the numbers, in order? Enter them and then hit Return to continue..."
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define sketchpad Complete
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="You've completed the experiment.<br/>Press any key to exit." x=0 y=0 z_index=0

define loop Conditions
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order sequential
	set item Trials
	set description "Repeatedly runs another item"
	set cycles 50
	set continuous no
	set column_order "Nback;Weight;Num0;Num1;Num2;Num3;Num4;Num5;Num6;Num7;Num8;Num9"
	set break_if_on_first yes
	set break_if never
	setcycle 0 Nback 1
	setcycle 0 Num0 "[num0]"
	setcycle 0 Num1 7
	setcycle 0 Num2 7
	setcycle 0 Num3 7
	setcycle 0 Num4 7
	setcycle 0 Num5 7
	setcycle 0 Num6 7
	setcycle 0 Num7 7
	setcycle 0 Num8 7
	setcycle 0 Num9 7
	setcycle 0 Weight 5
	setcycle 1 Nback 1
	setcycle 1 Num0 "[num0]"
	setcycle 1 Num1 7
	setcycle 1 Num2 7
	setcycle 1 Num3 7
	setcycle 1 Num4 7
	setcycle 1 Num5 7
	setcycle 1 Num6 7
	setcycle 1 Num7 7
	setcycle 1 Num8 7
	setcycle 1 Num9 7
	setcycle 1 Weight 5
	setcycle 2 Nback 1
	setcycle 2 Num0 "[num0]"
	setcycle 2 Num1 7
	setcycle 2 Num2 7
	setcycle 2 Num3 7
	setcycle 2 Num4 7
	setcycle 2 Num5 7
	setcycle 2 Num6 7
	setcycle 2 Num7 7
	setcycle 2 Num8 7
	setcycle 2 Num9 7
	setcycle 2 Weight 5
	setcycle 3 Nback 1
	setcycle 3 Num0 "[num0]"
	setcycle 3 Num1 7
	setcycle 3 Num2 7
	setcycle 3 Num3 7
	setcycle 3 Num4 7
	setcycle 3 Num5 7
	setcycle 3 Num6 7
	setcycle 3 Num7 7
	setcycle 3 Num8 7
	setcycle 3 Num9 7
	setcycle 3 Weight 5
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	setcycle 5 Nback 2
	setcycle 5 Num0 "[num0]"
	setcycle 5 Num1 "[num1]"
	setcycle 5 Num2 7
	setcycle 5 Num3 7
	setcycle 5 Num4 7
	setcycle 5 Num5 7
	setcycle 5 Num6 7
	setcycle 5 Num7 7
	setcycle 5 Num8 7
	setcycle 5 Num9 7
	setcycle 5 Weight 5
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	setcycle 10 Nback 3
	setcycle 10 Num0 "[num0]"
	setcycle 10 Num1 "[num1]"
	setcycle 10 Num2 "[num2]"
	setcycle 10 Num3 7
	setcycle 10 Num4 7
	setcycle 10 Num5 7
	setcycle 10 Num6 7
	setcycle 10 Num7 7
	setcycle 10 Num8 7
	setcycle 10 Num9 7
	setcycle 10 Weight 5
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	setcycle 15 Nback 4
	setcycle 15 Num0 "[num0]"
	setcycle 15 Num1 "[num1]"
	setcycle 15 Num2 "[num2]"
	setcycle 15 Num3 "[num3]"
	setcycle 15 Num4 7
	setcycle 15 Num5 7
	setcycle 15 Num6 7
	setcycle 15 Num7 7
	setcycle 15 Num8 7
	setcycle 15 Num9 7
	setcycle 15 Weight 5
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	setcycle 20 Nback 5
	setcycle 20 Num0 "[num0]"
	setcycle 20 Num1 "[num1]"
	setcycle 20 Num2 "[num2]"
	setcycle 20 Num3 "[num3]"
	setcycle 20 Num4 "[num4]"
	setcycle 20 Num5 7
	setcycle 20 Num6 7
	setcycle 20 Num7 7
	setcycle 20 Num8 7
	setcycle 20 Num9 7
	setcycle 20 Weight 5
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	setcycle 25 Nback 6
	setcycle 25 Num0 "[num0]"
	setcycle 25 Num1 "[num1]"
	setcycle 25 Num2 "[num2]"
	setcycle 25 Num3 "[num3]"
	setcycle 25 Num4 "[num4]"
	setcycle 25 Num5 "[num5]"
	setcycle 25 Num6 7
	setcycle 25 Num7 7
	setcycle 25 Num8 7
	setcycle 25 Num9 7
	setcycle 25 Weight 5
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	setcycle 30 Nback 7
	setcycle 30 Num0 "[num0]"
	setcycle 30 Num1 "[num1]"
	setcycle 30 Num2 "[num2]"
	setcycle 30 Num3 "[num3]"
	setcycle 30 Num4 "[num4]"
	setcycle 30 Num5 "[num5]"
	setcycle 30 Num6 "[num6]"
	setcycle 30 Num7 7
	setcycle 30 Num8 7
	setcycle 30 Num9 7
	setcycle 30 Weight 5
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	setcycle 35 Nback 8
	setcycle 35 Num0 "[num0]"
	setcycle 35 Num1 "[num1]"
	setcycle 35 Num2 "[num2]"
	setcycle 35 Num3 "[num3]"
	setcycle 35 Num4 "[num4]"
	setcycle 35 Num5 "[num5]"
	setcycle 35 Num6 "[num6]"
	setcycle 35 Num7 "[num7]"
	setcycle 35 Num8 7
	setcycle 35 Num9 7
	setcycle 35 Weight 5
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	setcycle 40 Nback 9
	setcycle 40 Num0 "[num0]"
	setcycle 40 Num1 "[num1]"
	setcycle 40 Num2 "[num2]"
	setcycle 40 Num3 "[num3]"
	setcycle 40 Num4 "[num4]"
	setcycle 40 Num5 "[num5]"
	setcycle 40 Num6 "[num6]"
	setcycle 40 Num7 "[num7]"
	setcycle 40 Num8 "[num8]"
	setcycle 40 Num9 7
	setcycle 40 Weight 5
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	setcycle 45 Nback 10
	setcycle 45 Num0 "[num0]"
	setcycle 45 Num1 "[num1]"
	setcycle 45 Num2 "[num2]"
	setcycle 45 Num3 "[num3]"
	setcycle 45 Num4 "[num4]"
	setcycle 45 Num5 "[num5]"
	setcycle 45 Num6 "[num6]"
	setcycle 45 Num7 "[num7]"
	setcycle 45 Num8 "[num8]"
	setcycle 45 Num9 "[num9]"
	setcycle 45 Weight 5
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	run Trials

define sketchpad Dot
	set reset_variables no
	set duration "[DotDur]"
	set description "Displays stimuli"
	draw fixdot color=green show_if=always style=default x=0 y=0 z_index=0

define inline_script GenerateNums
	set description "Executes Python code"
	___run__
	nums=["A","B","C","D","E","F","G","H","I","J"]
	random.shuffle(nums)
	var.num0=nums[0]
	var.num1=nums[1]
	var.num2=nums[2]
	var.num3=nums[3]
	var.num4=nums[4]
	var.num5=nums[5]
	var.num6=nums[6]
	var.num7=nums[7]
	var.num8=nums[8]
	var.num9=nums[9]
	#global nums
	__end__
	set _prepare "import random"

define sketchpad Intro
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="In this experiment you will see a sequence of numbers.<br/><br/>Your job will be to remember those numbers<br/>in order.<br/><br/>Once you enter the numbers into the box<br/> hit the SPACE BAR to continue." x=0 y=0 z_index=0

define sketchpad Next
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press the SPACE BAR when you're ready<br/>to continue to the next sequence of numbers" x=0 y=0 z_index=0

define sketchpad Recall
	set reset_variables no
	set duration 300
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Recall..." x=0 y=0 z_index=0

define keyboard_response SPACE_BAR
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses SPACE

define sketchpad Seq0
	set reset_variables no
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="[Num0]" x=0 y=0 z_index=0

define sketchpad Seq1
	set reset_variables no
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="[Num1]" x=0 y=0 z_index=0

define sketchpad Seq2
	set reset_variables no
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="[Num2]" x=0 y=0 z_index=0

define sketchpad Seq3
	set reset_variables no
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="[Num3]" x=0 y=0 z_index=0

define sketchpad Seq4
	set reset_variables no
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="[Num4]" x=0 y=0 z_index=0

define sketchpad Seq5
	set reset_variables no
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="[Num5]" x=0 y=0 z_index=0

define sketchpad Seq6
	set reset_variables no
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="[Num6]" x=0 y=0 z_index=0

define sketchpad Seq7
	set reset_variables no
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="[Num7]" x=0 y=0 z_index=0

define sketchpad Seq8
	set reset_variables no
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="[Num8]" x=0 y=0 z_index=0

define sketchpad Seq9
	set reset_variables no
	set duration "[NumDur]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="[Num9]" x=0 y=0 z_index=0

define inline_script Set_Variables
	set description "Executes Python code"
	___run__
	#Set duration for each number
	exp.set("NumDur",750)
	#Set ISI
	exp.set("ISIdur",500)
	#Set time for participants to hold sequence in WM
	exp.set("DotDur",3000)
	__end__
	set _prepare ""

define sequence Trials
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Seq0 "=self.get('Num2')!=7"
	run blank "=self.get('Num2')!=7"
	run Seq1 "=self.get('Num2')!=7"
	run blank "=self.get('Num2')!=7"
	run Seq2 "=self.get('Num2')!=7"
	run blank "=self.get('Num2')!=7"
	run Seq3 "=self.get('Num3')!=7"
	run blank "=self.get('Num3')!=7"
	run Seq4 "=self.get('Num4')!=7"
	run blank "=self.get('Num4')!=7"
	run Seq5 "=self.get('Num5')!=7"
	run blank "=self.get('Num5')!=7"
	run Seq6 "=self.get('Num6')!=7"
	run blank "=self.get('Num6')!=7"
	run Seq7 "=self.get('Num7')!=7"
	run blank "=self.get('Num7')!=7"
	run Seq8 "=self.get('Num8')!=7"
	run blank "=self.get('Num8')!=7"
	run Seq9 "=self.get('Num9')!=7"
	run Dot "=self.get('Num2')!=7"
	run Recall "=self.get('Num2')!=7"
	run Answer "=self.get('Num2')!=7"
	run process_trial "=self.get('Num2')!=7"
	run new_feedback "=self.get('Num2')!=7"
	run logger "=self.get('Num2')!=7"
	run Next "=self.get('Num2')!=7"
	run SPACE_BAR "=self.get('Num2')!=7"
	run GenerateNums always

define sketchpad Welcome
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Welcome to the experiment.<br/>Your Participant Code is [subject_nr].<br/><br/>Press the SPACE BAR to continue" x=0 y=0 z_index=0

define sketchpad blank
	set reset_variables no
	set duration "[ISIdur]"
	set description "Displays stimuli"

define sequence experiment
	# Written by Grant M. Berry, 08-2015
	# berry.grant@gmail.com
	# Conducts a forward digit span task with randomized sequences of numbers from lengths 3-10, with the ability to alter this range
	# Forward digit span represents short-term, working memory
	# There are 20 repetitions of each sequence length. For the case with range 3-10, there are 8*20=160 sequences to be memorized
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Welcome always
	run SPACE_BAR always
	run form_consent always
	run Intro always
	run SPACE_BAR always
	run Set_Variables always
	run GenerateNums always
	run Conditions always
	run Complete always

define form_consent form_consent
	set timeout infinite
	set spacing 10
	set rows "1;4;1;1"
	set only_render no
	set margins "50;50;50;50"
	set form_title "<span size=24>Consent Form</span>"
	__form_text__
	You are about to participate in a series of brief experiments.
	
	This experiment poses no known risks to your health and your name will not be associated with the findings.
	
	Upon completion of your participation in this study, you will be provided with a brief explanation of the question this study addresses.
	
	If you have any questions not addressed by this consent form, please do not hesitate to ask.
	
	You can stop at any time during experiment if you feel uncomfortable.
	__end__
	set description "A simple consent form"
	set decline_text "Do not participate"
	set decline_message "You need to accept the consent form to participate!"
	set cols "2;2"
	set checkbox_text "I have read and understood the information shown above"
	set accept_text "Participate!"
	set _theme gray
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 2 1 label center=no text="[form_text]"
	widget 0 2 2 1 checkbox text="[checkbox_text]" var=checkbox_status
	widget 0 3 1 1 button text="[accept_text]" var=accept_status
	widget 1 3 1 1 button text="[decline_text]"


define logger logger
	set description "Logs experimental data"
	set auto_log yes
	log fbtext
	log num_correct
	log num_total
	log seq_presented

define feedback new_feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="response : [response]<br />feedback: [fbtext]<br />correct [num_correct] out of [num_total]" x=0 y=-192 z_index=0

define inline_script process_trial
	set description "Executes Python code"
	___run__
	var.seq_presented = var.num0 + var.num1 + var.num2 + var.num3 + var.num4 + var.num5 + var.num6 + var.num7 + var.num8 + var.num9
	
	if var.Nback > len(var.seq_presented):
	   raise Exception('Invalid value for Nback (%s)' % var.Nback)
	
	var.seq_presented = var.seq_presented[0:var.Nback]
	print(var.seq_presented) 
	
	
	var.response = var.response.upper()
	var.response = var.response.strip()
	if (var.response == var.seq_presented):
	  var.fbtext = "Correct sequence"
	else:
	  var.fbtext = "Incorrect sequence"
	print(var.fbtext)
	
	var.num_correct = 0
	var.num_total = len(var.response)
	for char in var.response:
	  if (var.seq_presented.find(char)) > -1:
	    var.num_correct = var.num_correct + 1
	print(var.num_correct)
	__end__
	___prepare__
	var.seq_presented = "None"
	__end__

